PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 0
  Units = norm
  Window size (pixels) = [800, 600]
  expName = ver3OertOndrej_PIT_experiment_psychopy
  keyboardBackend = Pyglet
  runMode = 1
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Routines
  Routine welcome
    CodeComponent conditionCode
      Code Type = Py
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      Begin Experiment:
        import random

        orderNum = random.randint(1, 6)
        scheduleNum = random.randint(1, 20)

        scheduleFile = f"PIT_experiment_schedules/order_{orderNum}/schedule_{scheduleNum}.csv"

        expInfo['orderNum'] = orderNum
        expInfo['scheduleNum'] = scheduleNum

        print("Chosen order:", orderNum)
        print("Chosen schedule:", scheduleNum)
        print("Chosen file:", scheduleFile)
      Each Frame:
        if defaultKeyboard.getKeys(keyList=['space']):
            continueRoutine = False
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    ImageComponent bgImage
      image = PIT_experiment_images/background.png
      size = (2,2)
      startVal [time (s)] = 0.0
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    ImageComponent balloonImageStart
      image = PIT_experiment_images/balloon.png
      pos = (0 ,-0.4)
      size = (0.24, 0.28)
      startVal [time (s)] = 0.0
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    TextComponent welcomeText
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the task

        Press space to continue
    ImageComponent curvedLine
      image = PIT_experiment_images/curved_line.png
      pos = (0, -0.35)
      size = (1.7, 0.5)
      startVal [time (s)] = 0.0
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  Routine start
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    ImageComponent bgImage_2
      image = PIT_experiment_images/background.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent balloonImage
      image = PIT_experiment_images/balloon.png
      pos = (0 ,-0.4)
      size = (0.24, 0.28)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    ImageComponent moneyImage
      image = PIT_experiment_images/money.png
      pos = (-0.6 ,-0.4)
      size = (0.10, 0.10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent moneyText
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.05
      pos = (-0.7 ,-0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = $$500
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    TextComponent startText
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Start
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    ImageComponent curvedLine_3
      image = PIT_experiment_images/curved_line.png
      pos = (0, -0.35)
      size = (1.7, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine indicators
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    CodeComponent indicatorCode
      Code Type = Py
      Begin Routine:
        safeCondition = "" if condition is None else str(condition)
        safeType = "" if airship_type is None else str(airship_type)
        safeColour = "" if colour is None else str(colour).strip()

        colourLower = safeColour.lower()

        indicatorInfo.setText(
            "Trial: " + str(trial_number) + "\n" +
            safeCondition + " | " +
            safeType + " | " +
            safeColour
        )

        indicatorFile = "PIT_experiment_images/indicator_default.png"
        airshipFile = "PIT_experiment_images/airship_default.png"

        if colourLower:
            indicatorFile = f"PIT_experiment_images/indicator_{colourLower}.png"
            airshipFile = f"PIT_experiment_images/airship_{colourLower}.png"
    ImageComponent bgImage_3
      image = PIT_experiment_images/background.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent balloonImage_2
      image = PIT_experiment_images/balloon.png
      pos = (0 ,-0.4)
      size = (0.24, 0.28)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent moneyImage_2
      image = PIT_experiment_images/money.png
      pos = (-0.6 ,-0.4)
      size = (0.10, 0.10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent moneyText_2
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.05
      pos = (-0.7 ,-0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = $$500
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    TextComponent indicatorTitle
      color = black
      letterHeight = 0.05
      pos = (0, 0.58)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Warning: incoming airships.....
        Pay 50 to reveal more?
    TextComponent indicatorInfo
      letterHeight = 0.05
      opacity = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = ""
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    ImageComponent indicatorImage
      image [set every repeat] = $indicatorFile
      pos = (0.4, 0.35)
      size = (0.16, 0.16)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent curvedLine_4
      image = PIT_experiment_images/curved_line.png
      pos = (0, -0.35)
      size = (1.7, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine pay_decision
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    CodeComponent payCode
      Code Type = Py
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      Each Frame:
        keys = defaultKeyboard.getKeys(keyList=['y', 'n'], waitRelease=False)

        if len(keys):
            keyName = keys[-1].name

            if keyName == 'y':
                pay = 1
            elif keyName == 'n':
                pay = 0

            continueRoutine = False
      End Routine:
        if 'pay' not in locals():
            pay = 0

        thisExp.addData('pay', pay)
    ImageComponent bgImage_4
      image = PIT_experiment_images/background.png
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent balloonImage_3
      image = PIT_experiment_images/balloon.png
      pos = (0 ,-0.4)
      size = (0.24, 0.28)
      startVal [time (s)] = 0.0
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    ImageComponent moneyImage_3
      image = PIT_experiment_images/money.png
      pos = (-0.6 ,-0.4)
      size = (0.10, 0.10)
      startVal [time (s)] = 0.0
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    TextComponent moneyText_3
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.05
      pos = (-0.7 ,-0.4)
      startVal [time (s)] = 0.0
      text = $$500
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    TextComponent decisionText
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.30)
      startVal [time (s)] = 0.0
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      text:
        Payment option

        Press Y for yes
        Press N for no
    ImageComponent curvedLine_5
      image = PIT_experiment_images/curved_line.png
      pos = (0, -0.35)
      size = (1.7, 0.5)
      startVal [time (s)] = 0.0
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  Routine shield_phase
    CodeComponent shieldCode
      Code Type = Py
      Begin Routine:
        import math

        # safe values
        safeCondition = "" if condition is None else str(condition)
        safeType = "" if airship_type is None else str(airship_type)
        safeOutcome = 0 if outcome is None else float(outcome)
        safeOutcome = max(0, min(120, safeOutcome))

        # show status text
        shieldInfo.setText("Paid: glitter shown" if pay == 1 else "Not paid: shield only")
        shieldCondition.setText(safeCondition + " | " + safeType)

        # map schedule outcome 0-120 onto a semicircle 0-180
        angle_deg = (safeOutcome / 120.0) * 180.0
        theta = math.radians(angle_deg)

        # same geometry you should also use later for the airship
        center_x = 0.0
        center_y = -0.35
        radius = 0.55

        cue_x = center_x - radius * math.cos(theta)
        cue_y = center_y + radius * math.sin(theta)

        # place glitter cue in the airship direction
        glitterImage.setPos((cue_x, cue_y))
        glitterImage.interpolate = False

        # only show glitter if participant paid
        if pay == 1:
            glitterImage.setOpacity(1)
        else:
            glitterImage.setOpacity(0)

        # shield remains visible
        shieldImage.setOpacity(1)
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    ImageComponent bgImage_5
      image = PIT_experiment_images/background.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent balloonImage_4
      image = PIT_experiment_images/balloon.png
      pos = (0 ,-0.4)
      size = (0.24, 0.28)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent moneyImage_4
      image = PIT_experiment_images/money.png
      pos = (-0.6 ,-0.4)
      size = (0.10, 0.10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent moneyText_4
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.05
      pos = (-0.7 ,-0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = $$500
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    TextComponent shieldInfo
      letterHeight = 0.05
      opacity = 0
      pos = (0.18, -0.48)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = ""
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    TextComponent shieldCondition
      letterHeight = 0.05
      opacity = 0
      pos = (0.18, -0.62)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = ""
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    ImageComponent shieldImage
      image = PIT_experiment_images/shield.png
      pos = (0.18, -0.05)
      size = (0.18, 0.18)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent curvedLine_6
      image = PIT_experiment_images/curved_line.png
      pos = (0, -0.35)
      size = (1.7, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine airship_arrival
    CodeComponent airshipCode
      Code Type = Py
      Begin Routine:
        import math

        safeOutcome = 0 if outcome is None else float(outcome)
        safeOutcome = max(0, min(120, safeOutcome))

        # exact schedule angle: 0..120 -> 0..180 degrees
        angle_deg = (safeOutcome / 120.0) * 180.0
        theta = math.radians(angle_deg)

        center_x = 0.0
        center_y = -0.35

        # final landing radius
        target_radius = 0.55

        # larger radius so the ship starts farther out on the SAME angle
        start_radius = 0.95

        # exact target position
        target_x = center_x - target_radius * math.cos(theta)
        target_y = center_y + target_radius * math.sin(theta)

        # exact arrival start position on same angle
        start_x = center_x - start_radius * math.cos(theta)
        start_y = center_y + start_radius * math.sin(theta)

        airshipImage.setImage(airshipFile)
        airshipImage.setPos((start_x, start_y))
        airshipImage.interpolate = False

        arrivalText.setOpacity(1 if condition == "Full" else 0)
        arrivalInfo.setOpacity(1 if condition == "Full" else 0)
        arrivalInfo.setText("Attack angle: " + str(round(safeOutcome, 1)))
        partialText.setOpacity(1 if condition == "Partial" else 0)
        noneText.setOpacity(1 if condition == "None" else 0)
      Each Frame:
        progress = min(t / 2.2, 1.0)

        current_x = start_x + progress * (target_x - start_x)
        current_y = start_y + progress * (target_y - start_y)

        airshipImage.setPos((current_x, current_y))
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    ImageComponent bgImage_6
      image = PIT_experiment_images/background.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent balloonImage_5
      image = PIT_experiment_images/balloon.png
      pos = (0 ,-0.4)
      size = (0.24, 0.28)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent moneyImage_5
      image = PIT_experiment_images/money.png
      pos = (-0.6 ,-0.4)
      size = (0.10, 0.10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent moneyText_5
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.05
      pos = (-0.7 ,-0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = $$500
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    TextComponent arrivalText
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      opacity [set every repeat] = (1 if condition == "Full" else 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Incoming airship...
    TextComponent arrivalInfo
      letterHeight = 0.05
      opacity [set every repeat] = 1 if condition == "Full" else 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $("Attack angle: " + str(round(outcome, 1)))
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    TextComponent partialText
      letterHeight = 0.05
      opacity [set every repeat] = 1 if condition == "Partial" else 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Partial Feedback
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    TextComponent noneText
      letterHeight = 0.05
      opacity [set every repeat] = 1 if condition == "None" else 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = No Feedback
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    ImageComponent curvedLine_7
      image = PIT_experiment_images/curved_line.png
      pos = (0, -0.35)
      size = (1.7, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent airshipImage
      flipHoriz = True
      image [set every repeat] = $airshipFile
      size = (0.28, 0.28)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine trial_end
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    CodeComponent code
      Code Type = Py
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      End Routine:
        showBreak = trial_number in [40, 80]
    CodeComponent saveData
      Code Type = Py
      End Routine:
        thisExp.addData('condition', condition)
        thisExp.addData('pay', pay if 'pay' in locals() else '')
        thisExp.addData('outcome', outcome)
        thisExp.addData('airship_type', airship_type)
    ImageComponent bgImage_8
      image = PIT_experiment_images/background.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent moneyImage_7
      image = PIT_experiment_images/money.png
      pos = (-0.6 ,-0.4)
      size = (0.10, 0.10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent moneyText_7
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.05
      pos = (-0.7 ,-0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $$500
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    TextComponent trialEndText
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Trial finished
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    ImageComponent curvedLine_9
      image = PIT_experiment_images/curved_line.png
      pos = (0, -0.35)
      size = (1.7, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine airship_attack
    CodeComponent airshipCode_2
      Code Type = Py
      Begin Routine:
        import math

        safeOutcome = 0 if outcome is None else float(outcome)
        safeOutcome = max(0, min(120, safeOutcome))

        # exact schedule angle: 0..120 -> 0..180 degrees
        angle_deg = (safeOutcome / 120.0) * 180.0
        theta = math.radians(angle_deg)

        center_x = 0.0
        center_y = -0.35
        target_radius = 0.55

        target_x = center_x - target_radius * math.cos(theta)
        target_y = center_y + target_radius * math.sin(theta)

        airshipImage_2.setImage(airshipFile)
        airshipImage_2.setPos((target_x, target_y))
        airshipImage_2.interpolate = False

        attackText.setOpacity(1 if condition == "Partial" else 0)
        attackInfo.setOpacity(1 if condition == "Full" else 0)
        attackInfo.setText(
            ("" if condition is None else str(condition))
            + " | "
            + ("" if airship_type is None else str(airship_type))
            + " | angle="
            + str(round(safeOutcome, 1))
        )
        partialAttackText.setOpacity(1 if condition == "Partial" else 0)
        noneAttackText.setOpacity(1 if condition == "None" else 0)
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    ImageComponent bgImage_7
      image = PIT_experiment_images/background.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent balloonImage_6
      image = PIT_experiment_images/balloon.png
      pos = (0 ,-0.4)
      size = (0.24, 0.28)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    ImageComponent moneyImage_6
      image = PIT_experiment_images/money.png
      pos = (-0.6 ,-0.4)
      size = (0.10, 0.10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent moneyText_6
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.05
      pos = (-0.7 ,-0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = $$500
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    TextComponent attackText
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      opacity [set every repeat] = 1 if condition == "Partial" else 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Attack
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    TextComponent attackInfo
      letterHeight = 0.05
      opacity [set every repeat] = 1 if condition == "Full" else 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $("" if condition is None else str(condition)) + " | " + ("" if airship_type is None else str(airship_type)) + " | angle=" + str(round(outcome, 1))
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    TextComponent partialAttackText
      letterHeight = 0.05
      opacity [set every repeat] = 1 if condition == "Partial" else 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Partial Feedback
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    TextComponent noneAttackText
      letterHeight = 0.05
      opacity [set every repeat] = 1 if condition == "None" else 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = No Feedback
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    ImageComponent curvedLine_8
      image = PIT_experiment_images/curved_line.png
      pos = (0, -0.35)
      size = (1.7, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent airshipImage_2
      flipHoriz = True
      image [set every repeat] = $airshipFile
      size = (0.28, 0.28)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine final_screen
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    ImageComponent bgImage_10
      image = PIT_experiment_images/background.png
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent endText
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.15
      startVal [time (s)] = 0.0
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      text:
        You have completed the task.

        Thank you for participating.
    KeyboardComponent endKey
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine break_screen
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        if not showBreak:
            continueRoutine = False
    ImageComponent bgImage_9
      image = PIT_experiment_images/background.png
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent moneyImage_8
      image = PIT_experiment_images/money.png
      pos = (-0.6 ,-0.3)
      size = (0.10, 0.10)
      startVal [time (s)] = 0.0
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    TextComponent moneyText_8
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.05
      pos = (-0.7 ,-0.3)
      startVal [time (s)] = 0.0
      text = $$500
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    TextComponent breakText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You may now take a short break.

        Press any key to continue.
    KeyboardComponent breakKey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent curvedLine_10
      image = PIT_experiment_images/curved_line.png
      pos = (0, -0.35)
      size = (1.7, 0.5)
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  LoopInitiator trialLoop loopType="TrialHandler"
    conditionsFile = $scheduleFile
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('condition', 'Full'), ('airship_type', 'stable'), ('trial_number', 1), ('trial_in_condition', 1), ('colour', 'Blue'), ('true_mean', 60.0), ('outcome', 59.56234413)]),
      OrderedDict([('condition', 'Full'), ('airship_type', 'stable'), ('trial_number', 2), ('trial_in_condition', 2), ('colour', 'Blue'), ('true_mean', 60.0), ('outcome', 65.08547432)]),
      OrderedDict([('condition', 'Partial'), ('airship_type', 'volatile'), ('trial_number', 41), ('trial_in_condition', 1), ('colour', 'Yellow'), ('true_mean', 56.72149292), ('outcome', 54.73537246)]),
      OrderedDict([('condition', 'Partial'), ('airship_type', 'volatile'), ('trial_number', 42), ('trial_in_condition', 2), ('colour', 'Yellow'), ('true_mean', 62.2602929), ('outcome', 67.03061757)]),
      OrderedDict([('condition', None), ('airship_type', 'volatile'), ('trial_number', 81), ('trial_in_condition', 1), ('colour', 'Purple'), ('true_mean', 63.79569188), ('outcome', 63.511058)]),
      OrderedDict([('condition', None), ('airship_type', 'stable'), ('trial_number', 82), ('trial_in_condition', 2), ('colour', 'Orange'), ('true_mean', 60.0), ('outcome', 60.73747732)])]
    Routine start
    Routine indicators
    Routine pay_decision
    Routine shield_phase
    Routine airship_arrival
    Routine airship_attack
    Routine trial_end
    Routine break_screen
  LoopTerminator trialLoop
  Routine final_screen
